<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Polhemus EM tracker"
      Description="Broadcasting tool tracking data through OpenIGTLink" 
    />
    <Device
      Id="TrackerDevice" 
      Type="Polhemus" 
      ToolReferenceFrame="Tracker" 
      Mode="PivotCalibration">
      <DataSources>
        <DataSource Type="Tool" Id="Reference" PortName="2"  />

      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Reference"/>

        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
 
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" />
        <Transform Name="ProbeToTracker" />
        <Transform Name="ImageToProbe" />

        <!-- <Transform Name="ReferenceToTracker" />
        <Transform Name="StylusToTracker" /> -->
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
